PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MTtestbed
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
    TextComponent welcome_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome, instructions go here.

        Press SPACE to start the experiment
    ImageComponent startButton
      image = resp_button.png
      pos = (0.46, -0.3)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
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    MouseComponent start_mouse
      clickable = Ref_submitButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine RateConfidence
    TextComponent questionTXT
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0
      text = How confident are you in estimating the uncertainty of the last stimulus?
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      labels = "Very unconfident", "Very confident"
      letterHeight = 0.05
      pos = (0, -0.0)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6 ,7)
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    ImageComponent submitButton
      image = resp_button.png
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [condition] = slider.rating
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    MouseComponent mouse
      clickable = submitButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = slider.rating
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  Routine SetReference
    CodeComponent CheckInput
      Code Type = Auto->JS
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      Begin Experiment:
        def TypeCastResp(input_var):
            try:
                float(input_var)
                #print(float(input_var))
                # enable submit button
                return True
            except:
                #print("participant did not enter a number")
                # show text on screen
                return False
      Each Frame:

        #print("EstResp.text: ")
        #print(EstResp.text)
        #print("len(EstResp.text): ")
        #print(len(EstResp.text))
        #print(type(EstResp.text))
      End Routine:
        #print("TypeCastResp(EstResp.text)")
        #print(TypeCastResp(EstResp.text))

        if TypeCastResp(EstResp.text) == True:
            print("this is false")
        else:
            print("this is true")
    TextComponent instrText_ref
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please set a reference number for this stimuli.
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    ImageComponent SetRefStim
      image = stim/ph4.png
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent SetRefResp
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent Ref_submitButton
      image = resp_button.png
      pos = (0.46, -0.3)
      size = (0.5, 0.1)
      startVal [condition] = TypeCastResp(SetRefResp.text) == True
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    MouseComponent ref_resp_mouse
      clickable = Ref_submitButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Trial1
    CodeComponent code
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        def TypeCastResp(input_var):
            try:
                float(input_var)
                #print(float(input_var))
                # enable submit button
                return True
            except:
                #print("participant did not enter a number")
                # show text on screen
                return False
      Each Frame:

        #print("EstResp.text: ")
        #print(EstResp.text)
        #print("len(EstResp.text): ")
        #print(len(EstResp.text))
        #print(type(EstResp.text))
      End Routine:
        #print("TypeCastResp(EstResp.text)")
        #print(TypeCastResp(EstResp.text))

        if TypeCastResp(EstResp.text) == True:
            print("this is false")
        else:
            print("this is true")
    TextComponent intrText
      letterHeight = 0.05
      pos = (0.3, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Uncertainty is 40
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    ImageComponent RefStim
      image = stim/ph4.png
      pos = (0, 0.3)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent TargetStim
      image [set every frame] = $visStim
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent EstResp
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent textboxText
      letterHeight = 0.05
      pos = (0.0, -0.2)
      startVal [time (s)] = 0.0
      text = Enter estimate here
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    ImageComponent ME_submitButton
      image = resp_button.png
      pos = (0.46, -0.3)
      size = (0.5, 0.1)
      startVal [condition] = TypeCastResp(EstResp.text) == True
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    MouseComponent resp_mouse
      clickable = ME_submitButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine StategyQ
    TextboxComponent Qstrategy
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent QstatTXT
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0
      text = What strategy did you use to determine the uncertainty of the stimuli?
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    ImageComponent submitQuestionButton
      image = resp_button.png
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [condition] = len(Qstrategy.text)!=0
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    MouseComponent mouse_2
      clickable = submitQuestionButton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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  Routine EndScreen
    TextComponent endTXT
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Thank you for participating!
Flow
  Routine WelcomeScreen
  LoopInitiator BigTrialLoop loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine SetReference
    LoopInitiator TrialsLoop1 loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'visStim': 'stim\\ph1'},
        {'visStim': 'stim\\ph2'},
        {'visStim': 'stim\\ph3'},
        {'visStim': 'stim\\ph4'},
        {'visStim': 'stim\\ph5'},
        {'visStim': 'stim\\ph6'},
        {'visStim': 'stim\\ph7'}]
      Routine Trial1
    LoopTerminator TrialsLoop1
    Routine RateConfidence
  LoopTerminator BigTrialLoop
  Routine StategyQ
  Routine EndScreen
